# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Heralding

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Heralding

# Flags for defining signal generator or signal analyzer functionality
signal_generator: True
signal_analyzer: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Input data]
unit: V
x_name: Record index
x_unit:
datatype: VECTOR_COMPLEX
permission: WRITE
#group: Input
show_in_measurement_dlg: True

[I_max]
datatype: DOUBLE
unit: V
def_value: 0
show_in_measurement_dlg: True

[I_min]
datatype: DOUBLE
unit: V
def_value: 0
show_in_measurement_dlg: True

[Q_max]
datatype: DOUBLE
unit: V
def_value: 0
show_in_measurement_dlg: True

[Q_min]
datatype: DOUBLE
unit: V
def_value: 0
show_in_measurement_dlg: True

[Value - Preselected]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
#group: Output
show_in_measurement_dlg: True

[Value]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
#group: Output
show_in_measurement_dlg: True
